PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = Digit Symbol Coding
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Routines
  Routine instructions
    ImageComponent instructions_1
      image = images/instructions1.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions2
    ImageComponent instructions_2
      image = images/instructions2.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text
      color = black
      letterHeight = 20
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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  Routine instructions3
    ImageComponent instructions_3
      image = images/instructions3.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine code_trials
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1','2','3'
      correctAns = $corrans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    ImageComponent key
      image [set every repeat] = images/key.JPG
      pos = (0, -80)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if trials.thisN == 0:
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 90:
            trials.finished = True
            continueRoutine = False
    ImageComponent symbol
      image [set every repeat] = $imgpath
      pos = (0, 120)
      startVal [time (s)] = 0.0
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  Routine practice1
    ImageComponent practiceimg1
      image = images/practice1.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_response
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent incorrect
      image = images/practice-incorrect.jpg
      opacity [set every repeat] = 0
      pos = (0, -250)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent practice_advance
      Code Type = Py
      Each Frame:
        wrongkey = event.getKeys(keyList=['2','3'])
        if wrongkey:
            timer = core.CountdownTimer(3)
            incorrect.opacity = 1

        rightkey = event.getKeys(keyList=['1'])
        if rightkey:
            continueRoutine = False
  Routine practice2
    ImageComponent practice_img_2
      image = images/practice2.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_resp_2
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent incorrect_2
      image = images/practice-incorrect.jpg
      opacity [set every repeat] = 0
      pos = (0, -250)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent practice_advance2
      Code Type = Py
      Each Frame:
        wrongkey = event.getKeys(keyList=['2','1'])
        if wrongkey:
            timer = core.CountdownTimer(3)
            incorrect_2.opacity = 1

        rightkey = event.getKeys(keyList=['3'])
        if rightkey:
            continueRoutine = False
  Routine practice3
    ImageComponent practiceimg3
      image = images/practice3.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_response_3
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent incorrect_3
      image = images/practice-incorrect.jpg
      opacity [set every repeat] = 0
      pos = (0, -250)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Each Frame:
        wrongkey = event.getKeys(keyList=['1','3'])
        if wrongkey:
            timer = core.CountdownTimer(3)
            incorrect_3.opacity = 1

        rightkey = event.getKeys(keyList=['2'])
        if rightkey:
            continueRoutine = False
Flow
  Routine instructions
  Routine instructions2
  Routine practice1
  Routine practice2
  Routine practice3
  Routine instructions3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = coding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', '4.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '9.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '5.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '1.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '8.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '1.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '4.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '6.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '9.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '3.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '2.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '9.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '2.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '8.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '3.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '1.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '4.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '1.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '7.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '8.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '7.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '4.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '2.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '7.jpg'), ('corrans', ['1'])]),
      OrderedDict([('imgpath', '3.jpg'), ('corrans', ['3'])]),
      OrderedDict([('imgpath', '5.jpg'), ('corrans', ['2'])]),
      OrderedDict([('imgpath', '6.jpg'), ('corrans', ['3'])])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
    Routine code_trials
  LoopTerminator trials
  Routine end
